<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index>1</spk:Index>
          <spk:SerialNumber>24054192</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>F:\Ipshita\Videos\Front.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>F:\Ipshita\Videos\Front.csv</io:FileName>
        <io:ListSeparator>\n</io:ListSeparator>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index>1</spk:Index>
          <spk:SerialNumber>24060943</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>F:\Ipshita\Videos\Top.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>F:\Ipshita\Videos\Top.csv</io:FileName>
        <io:ListSeparator>\n</io:ListSeparator>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>115</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>COM6</port:PortName>
          <port:NewLine />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:CreateSerialPort">
          <port:PortName>COM6</port:PortName>
          <port:BaudRate>57600</port:BaudRate>
          <port:NewLine>\r\n</port:NewLine>
          <port:Parity>None</port:Parity>
          <port:ParityReplace>63</port:ParityReplace>
          <port:DataBits>8</port:DataBits>
          <port:StopBits>One</port:StopBits>
          <port:Handshake>None</port:Handshake>
          <port:DiscardNull>false</port:DiscardNull>
          <port:DtrEnable>false</port:DtrEnable>
          <port:RtsEnable>false</port:RtsEnable>
          <port:ReadBufferSize>4096</port:ReadBufferSize>
          <port:WriteBufferSize>2048</port:WriteBufferSize>
          <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>